CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:319
GitHash:
ModuleCount:27
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['To begin creating your project, use the Images module to compile a list of files and/or folders that you want to analyze. You can also specify a set of rules to include only the desired files in your selected folders.', '—', 'Settings converted from legacy pipeline.']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
    Filter images?:No filtering
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
Metadata:[module_num:2|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notes:['']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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:3
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:.*(?P<well>[A-Z]\d+)_s(?P<site>\d+)_w(?P<channel>\d)
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    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:(?P<folder_illum>.*)_Illum(?P<illum>.*)\.
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    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression to extract from folder name:.*(\\|/)(?P<folder>.*)
    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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notes:['Note the mixing of $folder and $folder2. These will be the same value, but one is stored in the folder name and the other is in the filename. After clicking *Update*, observe the column directly underneath. This column reflects the grouping. Note that the value for $folder is used in the *Groups* module, not $folder2. This behavior is ambiguous, because $folder2 is not explicitly used in the grouping. Regardless, the images are still grouped together.']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
    Assign a name to:Images matching rules
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    Match metadata:[{u'ActinIllum': u'folder_illum', u'DAPI': u'folder', u'TubIllum': u'folder_illum', u'Tubulin': u'folder', u'DAPIillum': u'folder_illum', u'Actin': u'folder'}, {u'ActinIllum': None, u'Tubulin': u'well', u'TubIllum': None, u'DAPI': u'well', u'DAPIillum': None, u'Actin': u'well'}, {u'ActinIllum': None, u'Tubulin': u'site', u'TubIllum': None, u'DAPI': u'site', u'DAPIillum': None, u'Actin': u'site'}]
    Image set matching method:Metadata
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    Assignments count:6
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does channel "1")
    Name to assign these images:DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does channel "2")
    Name to assign these images:Actin
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does channel "4")
    Name to assign these images:Tubulin
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does illum "Actin")
    Name to assign these images:ActinIllum
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    Select the image type:Illumination function
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    Select the rule criteria:and (metadata does illum "DAPI")
    Name to assign these images:DAPIillum
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    Select the image type:Illumination function
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    Select the rule criteria:and (metadata does illum "Tubulin")
    Name to assign these images:TubIllum
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    Select the image type:Illumination function
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
Groups:[module_num:4|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notes:['The Groups module optionally allows you to split your list of images into image subsets (groups) which will be processed independently of each other. Examples of groupings include screening batches, microtiter plates, time-lapse movies, etc.', '—', 'Settings converted from legacy pipeline.']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
    Do you want to group your images?:Yes
    grouping metadata count:2
    Metadata category:folder
    Metadata category:well

CorrectIlluminationApply:[module_num:5|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
    Select the input image:DAPI
    Name the output image:CorrDAPI
    Select the illumination function:DAPIillum
    Select how the illumination function is applied:Divide

CorrectIlluminationApply:[module_num:6|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
    Select the input image:Actin
    Name the output image:CorrActin
    Select the illumination function:ActinIllum
    Select how the illumination function is applied:Divide

CorrectIlluminationApply:[module_num:7|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
    Select the input image:Tubulin
    Name the output image:CorrTub
    Select the illumination function:TubIllum
    Select how the illumination function is applied:Divide

SaveImages:[module_num:8|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
    Select the type of image to save:Image
    Select the image to save:CorrActin
    Select method for constructing file names:From image filename
    Select image name for file prefix:Actin
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|illum_corrected/\g<folder>
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:9|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
    Select the type of image to save:Image
    Select the image to save:CorrDAPI
    Select method for constructing file names:From image filename
    Select image name for file prefix:DAPI
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|illum_corrected/\g<folder>
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:10|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
    Select the type of image to save:Image
    Select the image to save:CorrTub
    Select method for constructing file names:From image filename
    Select image name for file prefix:Tubulin
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|illum_corrected/\g<folder>
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
Opening:[module_num:11|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notes:['This is to smooth the DAPI image that has a lot of texture.']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
    Select the input image:CorrDAPI
    Name the output image:OpeningDAPI
    Structuring element:disk,5

IdentifyPrimaryObjects:[module_num:12|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
    Select the input image:OpeningDAPI
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):15,115
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:9
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0,1
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    Two-class or three-class thresholding?:Two classes
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
IdentifySecondaryObjects:[module_num:13|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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Watershed - Image
    Select the input image:CorrActin
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    Discard secondary objects touching the border of the image?:Yes
    Discard the associated primary objects?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
IdentifyTertiaryObjects:[module_num:14|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
    Select the larger identified objects:Cells
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:Cytoplasm
    Shrink smaller object prior to subtraction?:Yes

ConvertObjectsToImage:[module_num:15|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
    Select the input objects:Cells
    Name the output image:CellsImage
    Select the color format:Color
    Select the colormap:Default

ConvertObjectsToImage:[module_num:16|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
    Select the input objects:Cytoplasm
    Name the output image:CytoplasmImage
    Select the color format:Color
    Select the colormap:Default

ConvertObjectsToImage:[module_num:17|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
    Select the input objects:Nuclei
    Name the output image:NucleiImage
    Select the color format:Color
    Select the colormap:Default

GrayToColor:[module_num:18|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
    Select a color scheme:RGB
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    Select the image to be colored green:Actin
    Select the image to be colored blue:DAPI
    Name the output image:ColorImage
    Relative weight for the red image:1.0
    Relative weight for the green image:1.0
    Relative weight for the blue image:1.0
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
OverlayOutlines:[module_num:19|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:ColorImage
    Name the output image:OrigOverlay
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:#FF80FF
    Select objects to display:Cells
    Select outline color:magenta
    Select objects to display:Nuclei

SaveImages:[module_num:20|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
    Select the type of image to save:Image
    Select the image to save:CellsImage
    Select method for constructing file names:From image filename
    Select image name for file prefix:DAPI
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Cell
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|labels/\g<folder>
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:21|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
    Select the type of image to save:Image
    Select the image to save:CytoplasmImage
    Select method for constructing file names:From image filename
    Select image name for file prefix:DAPI
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Cytoplasm
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|labels/\g<folder>
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:22|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
    Select the type of image to save:Image
    Select the image to save:NucleiImage
    Select method for constructing file names:From image filename
    Select image name for file prefix:DAPI
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Nuclei
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|labels/\g<folder>
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:23|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
    Select the type of image to save:Image
    Select the image to save:OrigOverlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:DAPI
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Overlay
    Saved file format:png
    Output file location:Default Output Folder sub-folder|overlay/\g<folder>
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
Crop:[module_num:24|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
    Select the input image:CellsImage
    Name the output image:CropCells
    Select the cropping shape:Objects
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    Remove empty rows and columns?:All
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    Select the objects:Cells

SaveCroppedObjects:[module_num:25|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notes:['Nuclei']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
    Objects:Cells
    Directory:Default Output Folder sub-folder|segments/\g<folder>/\g<well>/\g<site>/B
    Saved file format:tiff
    Do you want to save cropped images or object masks?:Images
    Image:CorrDAPI

SaveCroppedObjects:[module_num:26|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
    Objects:Cells
    Directory:Default Output Folder sub-folder|segments/\g<folder>/\g<well>/\g<site>/R
    Saved file format:tiff
    Do you want to save cropped images or object masks?:Images
    Image:CorrTub

SaveCroppedObjects:[module_num:27|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
    Objects:Cells
    Directory:Default Output Folder sub-folder|segments/\g<folder>/\g<well>/\g<site>/G
    Saved file format:tiff
    Do you want to save cropped images or object masks?:Images
    Image:CorrActin
