CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:319
GitHash:
ModuleCount:10
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:No filtering
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Plate>.*)_(?P<Well>[A-P][0-9]{2})_s(?P<Site>[0-9])_w(?P<ChannelNumber>[0-9])
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    Extract metadata from:All images
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    Metadata extraction method:Import from file
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    Extract metadata from:All images
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    Metadata file location:Elsewhere...|/Volumes/My Passport/PFM
    Match file and image metadata:[{'Image Metadata': u'FileLocation', 'CSV Metadata': u'Image_FileName'}]
    Use case insensitive matching?:No
    Metadata file name:flatten_files.csv

NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "_w1")
    Name to assign these images:DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "_w2")
    Name to assign these images:TUBULIN
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "_w4")
    Name to assign these images:ACTIN
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:1
    Metadata category:ImageId

IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:DAPI
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):10,40
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
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    Use advanced settings?:No
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
IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:ACTIN
    Name the primary objects to be identified:ACTIN
    Typical diameter of objects, in pixel units (Min,Max):50,600
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
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    Use advanced settings?:No
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
IdentifyPrimaryObjects:[module_num:7|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
    Select the input image:TUBULIN
    Name the primary objects to be identified:TUBULIN
    Typical diameter of objects, in pixel units (Min,Max):30,120
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
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    Use advanced settings?:No
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
IdentifySecondaryObjects:[module_num:8|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
    Select the input objects:TUBULIN
    Name the objects to be identified:CELLSNT
    Select the method to identify the secondary objects:Propagation
    Select the input image:ACTIN
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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
IdentifySecondaryObjects:[module_num:9|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
    Select the input objects:CELLSNT
    Name the objects to be identified:CELLS
    Select the method to identify the secondary objects:Propagation
    Select the input image:DAPI
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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
GrayToColor:[module_num:10|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
    Select a color scheme:RGB
    Select the image to be colored red:TUBULIN
    Select the image to be colored green:ACTIN
    Select the image to be colored blue:DAPI
    Name the output image:ColorImage
    Relative weight for the red image:1.0
    Relative weight for the green image:1.0
    Relative weight for the blue image:1.0
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